PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280,1024]
  expName = AO_human_v_robot
  keyboardBackend = ioHub
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Routines
  Routine stimLoader
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    CodeComponent codeLoader
      Code Type = Py
      Begin Experiment:
        blockList = [];
        conditionList = [];
        stimList = [];
        stimDirList=[];
        catchtrialQList = [];
        markerValList = [];

        N_block = 10
      Begin Routine:
        blockList.append(block);
        stimList.append(stimulus);
        conditionList.append(condition);
        stimDirList.append(stimDir);

        catchtrialQList.append(catchtrialQ);
        markerValList.append(markerVal);
  Routine welcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press Space to start the experiment
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeSetup
      Code Type = Py
      Before Experiment:
        from collections import Counter
      Begin Experiment:
        #blockLenList = []
      Begin Routine:
        counts = Counter(blockList)

        countBlockList = [counts[i] for i in range(N_block)] # count the number of trials within each block
        print(countBlockList)
  Routine breakPeriod
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    CodeComponent codeBreakCD
      Code Type = Py
      Begin Experiment:
        progVal = 0

        breakLength = 15 + 1
        breakCD = breakLength
      Begin Routine:
        progVal = counterBlock / N_block

        breakCD = breakCD -1
    TextComponent textBreak
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Let's have 15-second break.

        After this break, focus on the white cross at the center.
    TextComponent textBreakCD
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $breakCD
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    ProgressComponent prog
      anchor = center left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.3, -0.25)
      progress [set every repeat] = progVal
      size = (0.6, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    TextComponent textProg
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Your progress
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    KeyboardComponent skipBreak
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine endBlock
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    CodeComponent codeEndBlock
      Code Type = Py
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      Begin Routine:
        counterBlock += 1
      End Routine:
        breakCD = breakLength
  Routine fixationCross
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    CodeComponent codeFixation
      Code Type = Py
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      Before Experiment:
        import random
      Begin Routine:
        #fixationLen = round(random.uniform(0.5, 0.75),3)
        fixationLen = 0.75
    PolygonComponent crossFixation
      durationEstim = 0.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationLen
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    TextComponent textFixationLen
      disabled = True
      durationEstim = 0.5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationLen
      text [set every repeat] = $fixationLen
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  Routine stimVid
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    CodeComponent codeStim
      Code Type = Py
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      Begin Experiment:
        counterStim = 0
      Begin Routine:
        print('Trial number: ', counterStim)

        print(stimDirList[counterStim])
      End Routine:
        counterStim += 1
    MovieComponent stimMovie
      backend = ffpyplayer
      durationEstim = 5
      forceEndRoutine = True
      movie [set every repeat] = $stimDirList[counterStim]
      size = (1.125, 0.63)
      startVal [time (s)] = 0.0
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    KeyboardComponent skipStim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine interTrialInterval
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    CodeComponent codeITI
      Code Type = Py
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      Begin Routine:
        itiLen = round(random.uniform(3.5, 4), 3)
    TextComponent textITI
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiLen
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      text:
        InterTrial interval

        (text to be disabled)
    KeyboardComponent skipITI
      allowedKeys = 'space'
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiLen
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  Routine blockSetup
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    CodeComponent codeBlockSetup
      Code Type = Py
      Begin Experiment:
        counterBlock = 0
      Begin Routine:
        N_trial = countBlockList[counterBlock]
        print('Number of trials: ', N_trial)
  Routine catchtrialQues
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    CodeComponent codeCatchtrial
      Code Type = Py
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      Begin Routine:
        if catchtrialQList[counterStim] == 'no':
            continueRoutine = False

        ansNeg = "Affirmative"
        ansAffirm = "Negative"

        #Randomize answer's position and key response
        posLeft = (-0.4, -0.1)
        posRight = (0.4, -0.1)
        keyNeg = random.choice(['left', 'right'])
        if keyNeg == 'left':
            posAnsNeg = posLeft

            keyAffirm = 'right'
            posAnsAffirm = posRight
        else :
            posAnsNeg = posRight

            keyAffirm = 'left'
            posAnsAffirm = posLeft
    TextComponent textQues
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        In the previous clip,

        which object

        does the actor use?
    TextComponent textAnsAffirm
      letterHeight = 0.05
      pos [set every repeat] = posAnsAffirm
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $ansAffirm
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    TextComponent textAnsNeg
      letterHeight = 0.05
      pos [set every repeat] = posAnsNeg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $ansNeg
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    KeyboardComponent keyRespAffirm
      allowedKeys [set every repeat] = $keyAffirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent keyRespNeg
      allowedKeys [set every repeat] = $keyNeg
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine postStimInterval
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    CodeComponent codePostStim
      Code Type = Py
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      Begin Routine:
        if counterStim < N_trial:
            continueRoutine = False
    TextComponent textITI2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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      text:
        InterTrial interval

        (text to be disabled)
  Routine endExperiment
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        This is the end of the experiment.

        Thank you for your effort and attention!

        Press Space to quit.
    KeyboardComponent keyQuit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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Flow
  LoopInitiator loopLoader loopType="TrialHandler"
    conditionsFile = stim_table_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 0, 'condition': 'robot_left', 'stimulus': 'robot_left_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/robot_left_0.mp4'},
      {'block': 0, 'condition': 'human_left', 'stimulus': 'human_left_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/human_left_2.mp4'},
      {'block': 1, 'condition': 'robot_left', 'stimulus': 'robot_left_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/robot_left_2.mp4'},
      {'block': 1, 'condition': 'robot_right', 'stimulus': 'robot_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/robot_right_0.mp4'},
      {'block': 2, 'condition': 'robot_right', 'stimulus': 'robot_right_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_right_3.mp4'},
      {'block': 2, 'condition': 'robot_left', 'stimulus': 'robot_left_1', 'stimValue': 1, 'stimLabel': 'forward-backward swing', 'stimDir': './stimuli/robot_left_1.mp4'},
      {'block': 3, 'condition': 'robot_right', 'stimulus': 'robot_right_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/robot_right_2.mp4'},
      {'block': 3, 'condition': 'human_right', 'stimulus': 'human_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/human_right_0.mp4'},
      {'block': 4, 'condition': 'human_right', 'stimulus': 'human_right_4', 'stimValue': 4, 'stimLabel': 'waving', 'stimDir': './stimuli/human_right_4.mp4'}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
    Routine stimLoader
  LoopTerminator loopLoader
  Routine welcomeScreen
  LoopInitiator loopBlock loopType="TrialHandler"
    loopType = sequential
    nReps = N_block
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    Routine blockSetup
    LoopInitiator loopBreakCD loopType="TrialHandler"
      loopType = sequential
      nReps = breakLength
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      Routine breakPeriod
    LoopTerminator loopBreakCD
    LoopInitiator loopTrial loopType="TrialHandler"
      loopType = sequential
      nReps = N_trial
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      Routine interTrialInterval
      Routine fixationCross
      Routine stimVid
      Routine catchtrialQues
      Routine postStimInterval
    LoopTerminator loopTrial
    Routine endBlock
  LoopTerminator loopBlock
  Routine endExperiment
