PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = practice-session
  keyboardBackend = ioHub
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Routines
  Routine startScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study and

        Thank you for your participation!

        Reminder, your participation is voluntary.

        Let's now prepare for the experiments!

        Press Space to continue >>>
    KeyboardComponent keySkipWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine putOnEEG
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's prepare to place the EEG headset on you.

        We need to make sure we have good contact quality.

        Next, please fixate on a cross centered on the screen >>>
    KeyboardComponent keySkipEEGsetup
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine checkEEGquality
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    PolygonComponent fixate2CheckEEG
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent textCheckEEG
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = Fixate on the cross for few seconds
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    KeyboardComponent keySkipEEGcheck
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine beginTraining
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    TextComponent textBeginTraining
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's begin the training!

        Please follow the instructions to get you used to the experiments.
    KeyboardComponent skipBeginTraining
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeTrainingSetup
      Code Type = Py
      Begin Routine:
        stimDirList_exp = stimDirList[:N_stim]
        stimDirList_catch = stimDirList[N_stim:]
        catchtrialObjList = catchtrialObjList[N_stim:]

        print(catchtrialObjList)

        counterStim = 0
  Routine introExp1
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    TextComponent textIntroExp1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In Experiment 1,

        you'll be asked to observe sequences of action videos.

        In each trial, the order will be:

        Fixation Cross => Action Video => Rest

        Let's practice 1 trial!
    KeyboardComponent skipIntro1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationCross_train1
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine loadStim
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    CodeComponent codeLoadStim
      Code Type = Py
      Begin Experiment:
        conditionList = []
        stimDirList = []
        catchtrialObjList = []

        N_stim = 10
        N_catch = 10
      Begin Routine:
        conditionList.append(condition)
        stimDirList.append(stimDir)
        catchtrialObjList.append(catchtrialObj)
Flow
  Routine startScreen
  Routine putOnEEG
  Routine checkEEGquality
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = training_randomized_trials - legacy.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blockNumber': 4, 'condition': 'robot_right', 'stimulus': 'robot_right_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_right_3.mp4', 'markerVal': 43, 'catchtrialObj': 'none'},
      {'blockNumber': 4, 'condition': 'robot_right', 'stimulus': 'robot_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/robot_right_0.mp4', 'markerVal': 40, 'catchtrialObj': 'none'},
      {'blockNumber': 6, 'condition': 'human_left', 'stimulus': 'human_left_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/human_left_2_f.mp4', 'markerVal': 12, 'catchtrialObj': 'none'},
      {'blockNumber': 1, 'condition': 'human_right', 'stimulus': 'human_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/human_right_0_m.mp4', 'markerVal': 20, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'human_left', 'stimulus': 'human_left_4', 'stimValue': 4, 'stimLabel': 'waving', 'stimDir': './stimuli/human_left_4_f.mp4', 'markerVal': 14, 'catchtrialObj': 'none'},
      {'blockNumber': 1, 'condition': 'robot_left', 'stimulus': 'robot_left_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_left_3.mp4', 'markerVal': 33, 'catchtrialObj': 'none'},
      {'blockNumber': 5, 'condition': 'human_left', 'stimulus': 'human_left_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/human_left_3_f.mp4', 'markerVal': 13, 'catchtrialObj': 'none'}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
    Routine loadStim
  LoopTerminator trials
  Routine beginTraining
  Routine introExp1
  Routine fixationCross_train1
